PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = GuessTheSound
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Routines
  Routine Study
    TextComponent Question
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        What is this sound?
    TextboxComponent ResponseBox
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      padding = None
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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    MouseComponent SubmitClick
      clickable = Submit
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = never
      startVal [time (s)] = 0.0
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    TextComponent ClickTheButton
      letterHeight = 0.025
      pos = (0, -0.03)
      startVal [time (s)] = 0.0
      text = Click 'Submit' to continue.
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    SoundComponent SoundItem
      sound [set every repeat] = $SoundFiles3
      startVal [time (s)] = 0.0
      volume = 1.1
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    TextComponent ItemNo
      letterHeight = 0.04
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      text [set every repeat] = $number
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    CodeComponent FinishTrial
      Code Type = Auto->JS
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      End Routine:
        #if trials.thisN == 2: # i.e. trials 0, 1, 2 have been completed
         #   trials.finished = True # end the loop early


        #if count == 60:
        #    trials.finished = True
        #    #trials.status = PsychoJS.Status.FINISHED
    TextboxComponent Submit
      bold = False
      color = black
      editable = False
      letterHeight = 0.03
      padding = None
      pos = (0, -0.4)
      size = (0.15, 0.1)
      startVal [time (s)] = 0.0
      text = Submit
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  Routine Count2
    TextComponent no2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 2
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  Routine Count3
    TextComponent no3
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = 3
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  Routine Count1
    TextComponent no1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 1
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    CodeComponent AddCount
      Code Type = Auto->JS
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      Begin Routine:
        count += 1
        number = str(count) + "/80"
  Routine Welcome
    TextComponent InstructionTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Welcome to 'Guess the Sound!'


        In this task, you will be presented with different environmental sounds one by one. Listen to each sound and try to give it a short label so that another person, seeing only your labels, can guess what the sound was.
    KeyboardComponent WelcomeContinueKey
      allowedKeys = 'space', 
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent CountIsZero
      Code Type = Auto->JS
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      Begin Experiment:
        count = 0
    TextComponent WelcomContinue
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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  Routine VolumeAdjustment
    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Please adjust your volume to a comfortable level.
    SoundComponent Music
      sound = volumeadjust.wav
      startVal [time (s)] = 0.0
      volume = 0.3
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    KeyboardComponent EndAdjustment
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent AdjustContinue
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE when you are ready to begin the task
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  Routine Start
    TextComponent StartTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = We will now begin the task
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  Routine End
    TextComponent ThankyouMssg
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        This is the end of the experiment.

        Thank you for your participation!



        Your Completion Code is
    TextboxComponent CompletionCode
      bold = True
      borderColor = Black
      color = Black
      editable = False
      fillColor = White
      letterHeight = 0.04
      padding = None
      size = (0.25, 0.07)
      startVal [time (s)] = 0.0
      text = 51DF249E
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    TextComponent ExitTxt
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to exit the study
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    KeyboardComponent ExitKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent CodeTxt
      letterHeight = 0.04
      pos = (0, -0.22)
      startVal [time (s)] = 0.0
      text = Please write the code down so you can enter it when you return to Prolific. You may then exit the study by pressing SPACE.
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  Routine StartAdjustment
    TextComponent VolumeBeginTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        We will first play some music to make sure your volume is at a comfortable level.
    TextComponent VolumeContinue
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE when you are ready for the sound check
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    KeyboardComponent VolumeContinueKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Welcome2
    TextComponent InstructionTxt2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Each sound will be only played once so please listen carefully and make sure you are in a quiet environment.

        You can leave your answer blank, but please try to label as many items as possible.
    TextComponent WelcomeContinue2
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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    KeyboardComponent WelcomeContinueKey2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine MST
    TextComponent MSTQuestion
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Has this sound been played before?
        (press the corresponding number on your keyboard)


        1 = YES, I have heard this exact same sound

        2 = NO, but I have heard a similar sound

        3 = NO, this is my first time hearing this sound
    KeyboardComponent MSTResp
      allowedKeys = '1', '2', '3',
      correctAns = $Correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Welcome1
    TextComponent WelcomeTxt1
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = Occasionally, you will hear the same sound file being played for the second time. You will also hear sounds that are similar but different from a previously played sound. In each trial, please also indicate whether the sound is a new sound, a repeat, or similar to a previously played sound.
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    TextComponent ContinueKey1
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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    KeyboardComponent ContinueResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  Routine Welcome1
  Routine Welcome2
  Routine StartAdjustment
  Routine VolumeAdjustment
  Routine Start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = GuessSounds_conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('SoundFiles3', 'Test/Foils/Slurp.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Initial/Repeat/ManWhistle.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Test/Foils/Airhorn.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Initial/Doubled/Piano_A.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Initial/Doubled/Siren_A.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Test/Foils/Bird.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Initial/Doubled/Cat_A.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Initial/NoRepeat/Baby_B.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Initial/Doubled/Writing_A.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Initial/NoRepeat/Mosquito_B.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Test/Foils/Typing.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Initial/Repeat/Pour.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Initial/Doubled/HairDryer_A.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Test/Foils/Airhorn.wav'), ('Correct', 1)]),
      OrderedDict([('SoundFiles3', 'Piano_D.wav'), ('Correct', 2)]),
      OrderedDict([('SoundFiles3', 'Initial/NoRepeat/Thunder_A.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Initial/NoRepeat/Fireworks.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Baby_A.wav'), ('Correct', 2)]),
      OrderedDict([('SoundFiles3', 'Initial/Repeat/IceDrop.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Siren_B.wav'), ('Correct', 2)])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
    Routine Count3
    Routine Count2
    Routine Count1
    Routine Study
    Routine MST
  LoopTerminator trials
  Routine End
